%YAML 1.1
---
# yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
device: CameraController
whoAmI: 1170
firmwareVersion: "1.1"
hardwareTargets: "1.2"
registers:
  Cam0Event:
    address: 32
    type: U8
    access: Event
    description: Signals a frame was triggered on camera 0
  Cam1Event:
    address: 33
    type: U8
    access: Event
    description: Signals a frame was triggered on camera 1
  ConfigureCam0Event:
    address: 34
    type: U8
    access: Write
    description: Configures the event on camera 0
  ConfigureCam1Event:
    address: 35
    type: U8
    access: Write
    description: Configures the event on camera 0
  StartAndStop:
    address: 36
    type: U8
    access: Write
    description: Starts and stops the cameras immediately
  StartAndStopTimestamped:
    address: 37
    type: U8
    access: Write
    description: Starts and stops the cameras on a timestamp
  StartTimestamp:
    address: 38
    type: U32
    access: Write
    description: Specifies when the camera will start to acquire frames
  StopTimestamp:
    address: 39
    type: U32
    access: Write
    description: Specifies when the camera will stop acquiring frames
  Reserved0: &reserved
    address: 40
    type: U8
    access: Read
    description: Reserved for future use
    visibility: private
  Reserved1:
    <<: *reserved
    address: 41
  TriggerConfigCam0:
    address: 42
    type: U8
    access: Write
    description: Configures the trigger source for camera 0
  TriggerInvertedCam0:
    address: 43
    type: U8
    access: Write
    description: Configures whether trigger is inverted for camera 0
  StrobeSourceCam0:
    address: 44
    type: U8
    access: Write
    description: Select the strobe source line for camera 0. The direct line or with pull-up.
  TriggerFrequencyCam0:
    address: 45
    type: U16
    access: Write
    description: Specifies the trigger frequency for camera 0 between 1 and 1000
  TriggerDurationCam0:
    address: 46
    type: U16
    access: Write
    description: Sets the duration of the trigger pulse, in microseconds (minimum is 100), for camera 0
  Reserved2:
    <<: *reserved
    address: 47
  Reserved3:
    <<: *reserved
    address: 48
  TriggerConfigCam1:
    address: 49
    type: U8
    access: Write
    description: Configures the trigger source for camera 1
  TriggerInvertedCam1:
    address: 50
    type: U8
    access: Write
    description: Configures whether trigger is inverted for camera 1
  StrobeSourceCam1:
    address: 51
    type: U8
    access: Write
    description: Select the strobe source line for camera 1. The direct line or with pull-up.
  TriggerFrequencyCam1:
    address: 52
    type: U16
    access: Write
    description: Specifies the trigger frequency for camera 1 between 1 and 1000
  TriggerDurationCam1:
    address: 53
    type: U16
    access: Write
    description: Sets the duration of the trigger pulse, in microseconds (minimum is 100), for camera 1
  Reserved4:
    <<: *reserved
    address: 54
  Reserved5:
    <<: *reserved
    address: 55
  ConfigureOutput0:
    address: 56
    type: U8
    access: Write
    description: Configures the digital Output 0
  ConfigureOutput1:
    address: 57
    type: U8
    access: Write
    description: Configures the digital Output 1
  Reserved6:
    <<: *reserved
    address: 58
  Reserved7:
    <<: *reserved
    address: 59
  OutputSet: &output
    address: 60
    type: U8
    access: Write
    description: Set the specified digital output lines
  OutputClear:
    <<: *output
    address: 61
    description: Clear the specified digital output lines
  OutputToggle:
    <<: *output
    address: 62
    description: Toggle the specified digital output lines
  OutputState:
    <<: *output
    address: 63
    description: Write the state of all digital output lines
  DigitalInput:
    address: 64
    type: U8
    access: Event
    description: Specifies the state of the digital Input 0